CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"FileLocation": "none", "IncubationTime": "text", "DateAndExperiment": "text", "Series": "none", "Frame": "none", "ConcentrationInnM": "text", "Temperature": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.................................................(?P<DateAndExperiment>.*)[\\/](?P<Peptide>.*)[\\/](?P<ConcentrationInnM>.*)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.............(?P<Well>[A-P][0-9])_(?P<PicCount>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Cell
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Invert
    Image or measurement?:Image
    Select the first image:Cell
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Cell
    Name the output image:IlluminationCorrection
    Select how the illumination function is calculated:Background
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    Block size:350
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:Invert
    Name the output image:IlluminationApply
    Select the illumination function:IlluminationCorrection
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:IlluminationApply
    Name the output image:RemoveSpeckle
    Select the operation:Suppress
    Feature size:5
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RemoveSpeckle
    Name the primary objects to be identified:Cell_Spread
    Typical diameter of objects, in pixel units (Min,Max):35,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EditObjectsManually:[module_num:10|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
    Select the objects to be edited:Cell_Spread
    Name the edited objects:CellsSelected
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Cell
    Allow overlapping objects?:Yes

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:CellsSelected
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:12|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
    Name the output measurement:Area_um2
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:CellsSelected
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:0.427186125
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:13|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:ReidentifyMaskedImageObjects
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:RemoveSpeckle
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):8
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\USB backup\\Joint Project 2\\Cell Counting Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_DateAndExperiment,Image|Metadata_Well,Image|Metadata_Peptide,Image|Metadata_PicCount,Image|Metadata_ConcentrationInnM,Image|Count_CellsSelected,CellsSelected|AreaShape_Area,CellsSelected|AreaShape_MajorAxisLength,CellsSelected|AreaShape_Perimeter,CellsSelected|Math_Area_um2
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:CellsSelected
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
